CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['cell:cell stained with DAPI or ssDNA', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith ".tif")
    Name to assign these images:cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:cell
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:cell
    Select objects to measure:Nuclei

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cell
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Nuclei

MaskImage:[module_num:8|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
    Select the input image:OrigOverlay
    Name the output image:Mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

SaveImages:[module_num:9|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
    Select the type of image to save:Mask
    Select the image to save:Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:cell
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:10|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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