CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['cell:cell stained with DAPI or ssDNA', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith ".tif")
    Name to assign these images:cell
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:cell
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Invert
    Image or measurement?:Image
    Select the first image:OrigGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Invert
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:8|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enabled:False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
    Select images to measure:Invert
    Select objects to measure:Nuclei

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cell
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Nuclei

ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskImage:[module_num:11|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
    Select the input image:OrigOverlay
    Name the output image:Mask
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenNuclei
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    Invert the mask?:No

SaveImages:[module_num:12|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
    Select the type of image to save:Mask
    Select the image to save:Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:cell
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:13|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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